// ------------------------------------------

// This file describes the third model with a myelinated main axon (used in fig 4).
// In this model, the internodes are myelinated.
// The internodes length is divided by 4 compare to "myelinated_axon_1".
// The number of myelin wraps ensheating internodes is 15.
// The soma can be depolarized or hyperpolarized before spike emission by switching "hyperpol" or "depol" from 0 to 1.

// ------------------------------------------



load_file("nrngui.hoc")

v_init=-70

celsius=37



wraps_number=15 // define the number of myelin wraps, fixed in this model

internodes_length_division_factor=2
// Define the division factor applied to internodes lengths compared to the standard model of fig 1, 2 and 3.
// This division factor can take the value 2 or 4.

hyperpol=0 // if 1, the soma is hyperpolarized during 200 ms before spike emission

depol=0 // if 1, the soma is depolarized during 10 s before spike emission







// ------------------------------------------

// Define L5 pyramidal cell neuronal morphology based on a reconstructed neuron from Hay et al., 2011.
// Available on Neuromorpho.org. Neuromorpho ID: NMO_07763; Neuron Name: C080418A-1-SR

// ------------------------------------------






n_nodes=600 // define the number nodes and internodes

create soma, dend[83], apic[133] // create the somato-dendritic sections

create ais // this section refers the axonal hill and the AIS

create mainaxon[n_nodes], node[n_nodes] // create the main axon sections, "mainaxon" refers to the internodes ans "node" to the nodes of Ranvier 

create axon[89] // create the proximal collateral sections

create coll[4] // create the distal collateral sections






//connect node and internodes

for i=0,n_nodes-2{
	
	mainaxon[i] connect node[i](0), 1
	node[i] connect mainaxon[i+1](0),1
	
}

mainaxon[n_nodes-1] connect node[n_nodes-1](0), 1


//connect the soma to the AIS and the AIS to the first internode
connect ais(0), soma(0.5)
connect mainaxon[0](0),ais(1)

// first collateral
connect axon[0](0), node[3](0.7)
connect axon[1](0), axon[0](1)
connect axon[2](0), axon[1](1)
connect axon[3](0), axon[2](1) 

connect axon[4](0), axon[2](1)
connect axon[5](0), axon[1](1)
connect axon[6](0), axon[0](1)

connect axon[7](0), axon[6](1)
connect axon[8](0), axon[7](1)  

connect axon[9](0), axon[7](1)
connect axon[10](0), axon[6](1)

connect axon[11](0), axon[10](1)
connect axon[12](0), axon[11](1)
connect axon[13](0), axon[12](1)

connect axon[14](0), axon[12](1)
connect axon[15](0), axon[11](1)

connect axon[16](0), axon[15](1)
connect axon[17](0), axon[16](1)

connect axon[18](0), axon[16](1)
connect axon[19](0), axon[15](1)

connect axon[20](0), axon[19](1)
connect axon[21](0), axon[19](1)

connect axon[22](0), axon[10](1)



//second collateral
connect axon[23](0), node[7](0.3)
connect axon[24](0), axon[23](1)

connect axon[25](0), axon[23](1)

connect axon[26](0), axon[25](1)
connect axon[27](0), axon[26](1) 

connect axon[28](0), axon[26](1)

connect axon[29](0), axon[28](1)
connect axon[30](0), axon[28](1)  

connect axon[31](0), axon[25](1)


//third collateral
connect axon[32](0), node[7](0.7)
connect axon[33](0), axon[32](1)
connect axon[34](0), axon[33](1)  

connect axon[35](0), axon[33](1)

connect axon[36](0), axon[35](1)
connect axon[37](0), axon[35](1)

connect axon[38](0), axon[32](1)

connect axon[39](0), axon[38](1)
connect axon[40](0), axon[39](1) 

connect axon[41](0), axon[39](1)

connect axon[42](0), axon[41](1)
connect axon[43](0), axon[41](1)  

connect axon[44](0), axon[38](1)


//4th collateral
connect axon[45](0), node[23](0.5)

//5th collateral
connect axon[46](0), node[27](0.3)

//6th collateral
connect axon[47](0), node[27](0.7)   

//7th collateral
connect axon[48](0), node[3](0.3)

connect axon[49](0), axon[48](1)
connect axon[50](0), axon[49](1)
connect axon[51](0), axon[50](1)
connect axon[52](0), axon[51](1)
connect axon[53](0), axon[52](1)
connect axon[54](0), axon[53](1)
connect axon[55](0), axon[54](1)

connect axon[56](0), axon[54](1)

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   


// 8th, 9th, 10th and 11th collaterals (distal collaterals)
for i=0,3{
	{node[40*i+63] connect coll[i](0), 0.5}
}


//connect the dendritic tree
connect dend(0), soma(0.5)
for i = 1, 2 connect dend[i](0), dend[i-1](1)
connect dend[3](0), dend[1](1)
for i = 4, 5 connect dend[i](0), dend[3](1)
for i = 6, 7 connect dend[i](0), dend[5](1)
connect dend[8](0), dend(1)
for i = 9, 10 connect dend[i](0), dend[8](1)
connect dend[11](0), soma(0.5)
for i = 12, 15 connect dend[i](0), dend[i-1](1)
connect dend[16](0), dend[14](1)
connect dend[17](0), dend[13](1)
for i = 18, 19 connect dend[i](0), dend[i-1](1)
connect dend[20](0), dend[18](1)
connect dend[21](0), dend[17](1)
connect dend[22](0), dend[12](1)
for i = 23, 24 connect dend[i](0), dend[i-1](1)
connect dend[25](0), dend[23](1)
connect dend[26](0), dend[22](1)
connect dend[27](0), dend[11](1)
for i = 28, 29 connect dend[i](0), dend[27](1)
connect dend[30](0), soma(0.5)
for i = 31, 33 connect dend[i](0), dend[i-1](1)
connect dend[34](0), dend[32](1)
connect dend[35](0), dend[31](1)
for i = 36, 37 connect dend[i](0), dend[35](1)
connect dend[38](0), dend[30](1)
for i = 39, 40 connect dend[i](0), dend[i-1](1)
connect dend[41](0), dend[39](1)
connect dend[42](0), dend[38](1)
for i = 43, 45 connect dend[i](0), dend[i-1](1)
connect dend[46](0), dend[44](1)
connect dend[47](0), dend[43](1)
connect dend[48](0), dend[42](1)
for i = 49, 50 connect dend[i](0), dend[48](1)
connect dend[51](0), soma(0.5)
for i = 52, 53 connect dend[i](0), dend[i-1](1)
connect dend[54](0), dend[52](1)
for i = 55, 56 connect dend[i](0), dend[54](1)
for i = 57, 58 connect dend[i](0), dend[56](1)
connect dend[59](0), dend[51](1)
for i = 60, 61 connect dend[i](0), dend[i-1](1)
connect dend[62](0), dend[60](1)
connect dend[63](0), dend[59](1)
connect dend[64](0), soma(0.5)
for i = 65, 66 connect dend[i](0), dend[i-1](1)
connect dend[67](0), dend[65](1)
for i = 68, 69 connect dend[i](0), dend[67](1)
for i = 70, 71 connect dend[i](0), dend[69](1)
connect dend[72](0), dend[64](1)
for i = 73, 75 connect dend[i](0), dend[i-1](1)
connect dend[76](0), dend[74](1)
connect dend[77](0), dend[73](1)
for i = 78, 79 connect dend[i](0), dend[77](1)
connect dend[80](0), dend[72](1)
for i = 81, 82 connect dend[i](0), dend[80](1)
connect apic(0), soma(0.5)
for i = 1, 3 connect apic[i](0), apic[i-1](1)
connect apic[4](0), apic[2](1)
connect apic[5](0), apic[1](1)
connect apic[6](0), apic(1)
for i = 7, 8 connect apic[i](0), apic[i-1](1)
connect apic[9](0), apic[7](1)
connect apic[10](0), apic[6](1)
for i = 11, 12 connect apic[i](0), apic[10](1)
for i = 13, 14 connect apic[i](0), apic[i-1](1)
connect apic[15](0), apic[13](1)
connect apic[16](0), apic[12](1)
for i = 17, 18 connect apic[i](0), apic[i-1](1)
connect apic[19](0), apic[17](1)
connect apic[20](0), apic[16](1)
for i = 21, 22 connect apic[i](0), apic[20](1)
for i = 23, 25 connect apic[i](0), apic[i-1](1)
connect apic[26](0), apic[24](1)
connect apic[27](0), apic[23](1)
connect apic[28](0), apic[22](1)
for i = 29, 30 connect apic[i](0), apic[28](1)
for i = 31, 32 connect apic[i](0), apic[i-1](1)
connect apic[33](0), apic[31](1)
for i = 34, 35 connect apic[i](0), apic[i-1](1)
connect apic[36](0), apic[34](1)
connect apic[37](0), apic[33](1)
for i = 38, 39 connect apic[i](0), apic[37](1)
for i = 40, 44 connect apic[i](0), apic[i-1](1)
connect apic[45](0), apic[43](1)
connect apic[46](0), apic[42](1)
connect apic[47](0), apic[41](1)
for i = 48, 49 connect apic[i](0), apic[i-1](1)
connect apic[50](0), apic[48](1)
connect apic[51](0), apic[47](1)
connect apic[52](0), apic[40](1)
for i = 53, 55 connect apic[i](0), apic[i-1](1)
connect apic[56](0), apic[54](1)
connect apic[57](0), apic[53](1)
connect apic[58](0), apic[52](1)
for i = 59, 61 connect apic[i](0), apic[i-1](1)
connect apic[62](0), apic[60](1)
connect apic[63](0), apic[59](1)
for i = 64, 65 connect apic[i](0), apic[63](1)
for i = 66, 67 connect apic[i](0), apic[65](1)
connect apic[68](0), apic[58](1)
for i = 69, 70 connect apic[i](0), apic[68](1)
connect apic[71](0), apic[39](1)
for i = 72, 73 connect apic[i](0), apic[i-1](1)
connect apic[74](0), apic[72](1)
for i = 75, 76 connect apic[i](0), apic[74](1)
connect apic[77](0), apic[71](1)
for i = 78, 79 connect apic[i](0), apic[i-1](1)
connect apic[80](0), apic[78](1)
for i = 81, 82 connect apic[i](0), apic[80](1)
connect apic[83](0), apic[77](1)
for i = 84, 85 connect apic[i](0), apic[i-1](1)
connect apic[86](0), apic[84](1)
for i = 87, 88 connect apic[i](0), apic[86](1)
connect apic[89](0), apic[83](1)
for i = 90, 91 connect apic[i](0), apic[89](1)
connect apic[92](0), apic[30](1)
for i = 93, 94 connect apic[i](0), apic[92](1)
for i = 95, 96 connect apic[i](0), apic[i-1](1)
connect apic[97](0), apic[95](1)
connect apic[98](0), apic[94](1)
for i = 99, 100 connect apic[i](0), apic[98](1)
for i = 101, 102 connect apic[i](0), apic[100](1)
for i = 103, 104 connect apic[i](0), apic[i-1](1)
connect apic[105](0), apic[103](1)
for i = 106, 107 connect apic[i](0), apic[105](1)
for i = 108, 109 connect apic[i](0), apic[i-1](1)
connect apic[110](0), apic[108](1)
connect apic[111](0), apic[107](1)
connect apic[112](0), apic[102](1)
for i = 113, 114 connect apic[i](0), apic[i-1](1)
connect apic[115](0), apic[113](1)
connect apic[116](0), apic[112](1)
for i = 117, 119 connect apic[i](0), apic[i-1](1)
connect apic[120](0), apic[118](1)
for i = 121, 122 connect apic[i](0), apic[120](1)
connect apic[123](0), apic[117](1)
for i = 124, 125 connect apic[i](0), apic[i-1](1)
connect apic[126](0), apic[124](1)
connect apic[127](0), apic[123](1)
for i = 128, 129 connect apic[i](0), apic[127](1)
connect apic[130](0), apic[116](1)

for i = 131, 132 connect apic[i](0), apic[130](1)




// establish the position, length and diameter of the different sections

soma {pt3dclear()
pt3dadd(-34.7085, 0.603584, -24.9993, 6.2247)
pt3dadd(-35.0617, 2.04099, -24.9993, 10.8678)
pt3dadd(-35.4149, 3.4784, -24.9993, 14.8223)
pt3dadd(-35.7681, 4.91581, -24.9993, 17.0169)
pt3dadd(-36.1212, 6.35322, -24.9993, 18.4437)
pt3dadd(-36.4744, 7.79062, -24.9993, 20.0008)
pt3dadd(-36.8276, 9.22803, -24.9993, 21.182)
pt3dadd(-37.1808, 10.6654, -24.9994, 21.8965)
pt3dadd(-37.5339, 12.1028, -24.9994, 22.2335)
pt3dadd(-37.8871, 13.5403, -24.9994, 22.3214)
pt3dadd(-38.2403, 14.9777, -24.9994, 21.7803)
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}

apic[10] {  }
apic[11] {pt3dclear()
pt3dadd(-32.27, 82.18, -29.85, 2.05)
pt3dadd(-30.25, 82.99, -31.27, 2.05)
pt3dadd(-28.2, 84.14, -32.35, 1.36)
pt3dadd(-26.84, 85.86, -32.95, 1.14)
pt3dadd(-25.02, 86.73, -33.38, 1.14)
pt3dadd(-23.43, 87.3, -34.25, 1.36)
pt3dadd(-21.84, 88.16, -35.05, 1.36)
pt3dadd(-19.56, 88.74, -35.63, 1.36)
pt3dadd(-18.43, 89.6, -35.92, 1.36)
pt3dadd(-16.38, 92.19, -36.25, 1.14)
pt3dadd(-15.25, 94.48, -36.27, 1.14)
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}

apic[60] {  }
apic[61] {pt3dclear()
pt3dadd(91.2, 1089.06, -50, 0.91)
pt3dadd(93.02, 1088.48, -49.97, 0.91)
pt3dadd(94.39, 1088.2, -50.9, 0.91)
pt3dadd(95.75, 1087.62, -50.9, 0.68)
pt3dadd(97.34, 1086.76, -51.38, 0.68)
pt3dadd(98.7, 1086.47, -51.35, 0.68)
pt3dadd(100.07, 1086.19, -51.63, 0.91)
pt3dadd(101.89, 1085.9, -51.65, 0.68)
pt3dadd(103.48, 1085.32, -51.97, 0.68)
pt3dadd(104.84, 1085.04, -50.83, 0.68)
pt3dadd(105.52, 1085.04, -50.83, 0.68)
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}

apic[128] {  }
apic[129] {pt3dclear()
pt3dadd(-392.98, 1098.45, -127.65, 1.14)
pt3dadd(-393.1, 1098.1, -127.65, 1.14)
pt3dadd(-394.8, 1097.24, -126.5, 0.68)
pt3dadd(-396.84, 1096.95, -126.5, 0.68)
pt3dadd(-398.2, 1097.52, -126.5, 0.68)
pt3dadd(-399.57, 1097.24, -126.9, 0.68)
pt3dadd(-400.93, 1096.66, -126.9, 0.68)
pt3dadd(-402.3, 1096.66, -126.93, 0.68)
pt3dadd(-404.8, 1096.95, -126.93, 0.68)
pt3dadd(-405.93, 1096.37, -127.47, 0.68)
pt3dadd(-407.07, 1096.37, -127.52, 0.68)
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}





for i=28,n_nodes-1{
	
	mainaxon[i]{
		L=25
		diam=1.14
	}
	
}



for i=0,n_nodes-1{
	
	node[i]{
		L=1.5
		diam=1.14
	}
	
}





for i=0,3{
	
	coll[i]{
		
		L=1000
		
		diam=0.23
		
	}
}



// define the number of segment for each section
forall nseg=int(L/10)+1







// ------------------------------------------

// Define the biophysics of the different sections

// ------------------------------------------


// somato-dendritic compartment
for i=0,132{
	apic[i]{cm=1 Ra=150 insert pas g_pas=0.0000333 e_pas=-69.5 insert na12 gbar_na12=80 insert na16 gbar_na16=0 ena=60 insert kv gbar_kv=10 ek=-90}
}

for i=0,82{
	dend[i]{cm=1 Ra=150 insert pas g_pas=0.0000333 e_pas=-69.5 insert na12 gbar_na12=80 insert na16 gbar_na16=0 ena=60 insert kv gbar_kv=10 ek=-90}
}

soma{cm=1 Ra=150 insert pas g_pas=0.0000333 e_pas=-69.5 insert na12 gbar_na12=80 insert na16 gbar_na16=0 ena=60 insert kv gbar_kv=20 ek=-90}







// proximal collaterals
for i=0,88{
	axon[i]{cm=1 Ra=150 insert pas g_pas=0.0000333 e_pas=-38.3 insert na16 gbar_na16=370 ena=60 insert capq gbar_capq=0.0001 eca=140 insert kd gbar_kd=0.00268 ek=-90}
}

// distal collaterals
for i=0,3{
	coll[i]{cm=1 Ra=150 insert pas g_pas=0.0000333 e_pas=-38.3 insert na16 gbar_na16=370 ena=60 insert capq gbar_capq=0.0001 eca=140 insert kd gbar_kd=0.00268 ek=-90}
}





// Axonal hill and AIS. This section is ~60µm-long and connected to the first internode

ais{cm=1 Ra=150 insert pas insert na12 insert na16 ena=60  insert kv insert kd ek=-90}


ais{                													
	cm(	0	:	0.168	) = 	1	:	1
	g_pas(	0	:	0.168	) = 	0.0000333	:	0.0000333
	e_pas(	0	:	0.168	) = 	-69.5	:	-69.5
	gbar_na12(	0	:	0.168	) = 	2560	:	2560
	gbar_na16(	0	:	0.168	) = 	0	:	0
	gbar_kv(	0	:	0.168	) = 	100	:	100
	gbar_kd(	0	:	0.168	) = 	0	:	0
}

ais{                													
	cm(	0.168	:	0.252	) = 	1	:	1
	g_pas(	0.168	:	0.252	) = 	0.0000333	:	0.0000333
	e_pas(	0.168	:	0.252	) = 	-69.5	:	-69.5
	gbar_na12(	0.168	:	0.252	) = 	3072	:	3072
	gbar_na16(	0.168	:	0.252	) = 	128	:	128
	gbar_kv(	0.168	:	0.252	) = 	100	:	100
	gbar_kd(	0.168	:	0.252	) = 	0	:	0
}	

ais{                													
	cm(	0.252	:	0.336	) = 	1	:	1
	g_pas(	0.252	:	0.336	) = 	0.0000333	:	0.0000333
	e_pas(	0.252	:	0.336	) = 	-69.5	:	-69.5
	gbar_na12(	0.252	:	0.336	) = 	2880	:	2880
	gbar_na16(	0.252	:	0.336	) = 	320	:	320
	gbar_kv(	0.252	:	0.336	) = 	100	:	100
	gbar_kd(	0.252	:	0.336	) = 	0	:	0
}	

ais{                													
	cm(	0.336	:	0.42	) = 	1	:	1
	g_pas(	0.336	:	0.42	) = 	0.0000333	:	0.0000333
	e_pas(	0.336	:	0.42	) = 	-69.5	:	-69.5
	gbar_na12(	0.336	:	0.42	) = 	2400	:	2400
	gbar_na16(	0.336	:	0.42	) = 	800	:	800
	gbar_kv(	0.336	:	0.42	) = 	100	:	100
	gbar_kd(	0.336	:	0.42	) = 	0	:	0
}	

ais{                													
	cm(	0.42	:	0.504	) = 	1	:	1
	g_pas(	0.42	:	0.504	) = 	0.0000333	:	0.0000333
	e_pas(	0.42	:	0.504	) = 	-69.5	:	-69.5
	gbar_na12(	0.42	:	0.504	) = 	1672	:	1672
	gbar_na16(	0.42	:	0.504	) = 	1368	:	1368
	gbar_kv(	0.42	:	0.504	) = 	100	:	100
	gbar_kd(	0.42	:	0.504	) = 	0	:	0
}	

ais{                													
	cm(	0.504	:	0.588	) = 	1	:	1
	g_pas(	0.504	:	0.588	) = 	0.0000333	:	0.0000333
	e_pas(	0.504	:	0.588	) = 	-69.5	:	-69.5
	gbar_na12(	0.504	:	0.588	) = 	1033.6	:	1033.6
	gbar_na16(	0.504	:	0.588	) = 	1782.9	:	1782.9
	gbar_kv(	0.504	:	0.588	) = 	100	:	100
	gbar_kd(	0.504	:	0.588	) = 	0	:	0
}	

ais{                													
	cm(	0.588	:	0.672	) = 	1	:	1
	g_pas(	0.588	:	0.672	) = 	0.0000333	:	0.0000333
	e_pas(	0.588	:	0.672	) = 	-69.5	:	-69.5
	gbar_na12(	0.588	:	0.672	) = 	480	:	480
	gbar_na16(	0.588	:	0.672	) = 	1920	:	1920
	gbar_kv(	0.588	:	0.672	) = 	100	:	100
	gbar_kd(	0.588	:	0.672	) = 	0	:	0
}	

ais{                													
	cm(	0.672	:	0.756	) = 	1	:	1
	g_pas(	0.672	:	0.756	) = 	0.0000333	:	0.0000333
	e_pas(	0.672	:	0.756	) = 	-69.5	:	-69.5
	gbar_na12(	0.672	:	0.756	) = 	208	:	208
	gbar_na16(	0.672	:	0.756	) = 	1865.1	:	1865.1
	gbar_kv(	0.672	:	0.756	) = 	100	:	100
	gbar_kd(	0.672	:	0.756	) = 	0	:	0
}	

ais{                													
	cm(	0.756	:	0.84	) = 	1	:	1
	g_pas(	0.756	:	0.84	) = 	0.0000333	:	0.0000333
	e_pas(	0.756	:	0.84		) = 	-69.5	:	-69.5
	gbar_na12(	0.756	:	0.84	) = 	19.2	:	19.2
	gbar_na16(	0.756	:	0.84	) = 	1645.7	:	1645.7
	gbar_kv(	0.756	:	0.84	) = 	100	:	100
	gbar_kd(	0.756	:	0.84	) = 	0	:	0
}	

ais{                													
	cm(	0.84	:	0.924	) = 	1	:	1
	g_pas(	0.84	:	0.924	) = 	0.0000333	:	0.0000333
	e_pas(	0.84	:	0.924	) = 	-69.5	:	-69.5
	gbar_na12(	0.84	:	0.924	) = 	0	:	0
	gbar_na16(	0.84	:	0.924	) = 	1371.4	:	1371.4
	gbar_kv(	0.84	:	0.924	) = 	100	:	100
	gbar_kd(	0.84	:	0.924	) = 	0	:	0
}	

ais{                													
	cm(	0.924	:	1	) = 	1	:	1
	g_pas(	0.924	:	1	) = 	0.0000333	:	0.0000333
	e_pas(	0.924	:	1	) = 	-69.5	:	-69.5
	gbar_na12(	0.924	:	1	) = 	0	:	0
	gbar_na16(	0.924	:	1	) = 	1097.1	:	1097.1
	gbar_kv(	0.924	:	1	) = 	100	:	100
	gbar_kd(	0.924	:	1	) = 	0	:	0
}	





// biophysics of internodes and nodes with a quarter length internodes

for i=1,n_nodes-1{

	mainaxon[i]{cm=1 Ra=150 insert pas g_pas=0.0000333 e_pas=-37.2 insert extracellular xraxial[0]=120663 xraxial[1]=10000000000 xg[0]=0.0000333/(wraps_number*2) xg[1]=10000000000 xc[0]=1/(wraps_number*2) xc[1]=0.0000000001 e_extracellular=0}

	node[i]{cm=1 Ra=150 insert pas g_pas=0.0000333 e_pas=-37.2 insert na16 gbar_na16=567.07 ena=60 insert kd gbar_kd=0.00431 ek=-90}
	
}






// ------------------------------------------

// Define the somatic stimulations used to induce AP (stim1)
// and to induce the subthreshold depolarization or hyperpolarization (stim2)

// ------------------------------------------




// stim1 is used to emmit an AP 10100 ms after the beginning of the simulation
objref stim1

soma{stim1=new IClamp(0.5) stim1.del=10100 stim1.dur=3}

// stim2 is used to hyperpolarize the soma during 200 ms before spike emission
// or to depolarize the soma during 10 s before spike emission
objref stim2

soma{stim2=new IClamp(0.5)}


if (hyperpol==0 && depol==0){

	stim1.amp=3
	
	stim2.amp=0
	
	stim2.del=100
	
	stim2.dur=10000
	
}

if (hyperpol==1 && depol==0){
	
	stim1.amp=5.1
	
	stim2.amp=-0.3225
	
	stim2.del=9900
	
	stim2.dur=200

}

if (hyperpol==0 && depol==1){

	stim1.amp=1.5
	
	stim2.amp=0.345
	
	stim2.del=100
	
	stim2.dur=10000

}











// ------------------------------------------

// Define the vectors recorded during the simulation and run the simulation

// ------------------------------------------







// create the vectors to record voltage in the soma and in the nodes of Ranvier
objref vec_voltage_mainaxon[n_nodes+1]

for i=0,n_nodes{
	
	vec_voltage_mainaxon[i]=new Vector()
	
}

// the first vector records the voltage at the soma
vec_voltage_mainaxon[0].record(&soma.v(0.5))

// the other vectors records the voltage at the nodes of Ranvier
for i=1,n_nodes{
	
	vec_voltage_mainaxon[i].record(&node[i-1].v(0.5))
	
}


// create a vector to store the distance of the nodes of Ranvier from the soma
objref vec_dist_mainaxon

vec_dist_mainaxon=new Vector()

vec_dist_mainaxon.append(0)


for i=1,n_nodes{
	
	if (i==1){vec_dist_mainaxon.append(76.614)}
	if (i==2){vec_dist_mainaxon.append(94.765)}
	if (i==3){vec_dist_mainaxon.append(113.207)}
	if (i==4){vec_dist_mainaxon.append(130.933)}
	if (i==5){vec_dist_mainaxon.append(186.331)}
	if (i==6){vec_dist_mainaxon.append(238.161)}
	if (i==7){vec_dist_mainaxon.append(280.932)}
	if (i==8){vec_dist_mainaxon.append(322.547)}
	if (i==9){vec_dist_mainaxon.append(347.209)}
	if (i==10){vec_dist_mainaxon.append(369.621)}
	if (i==11){vec_dist_mainaxon.append(394.315)}
	if (i==12){vec_dist_mainaxon.append(419.63)}
	if (i==13){vec_dist_mainaxon.append(447.73)}
	if (i==14){vec_dist_mainaxon.append(477.498)}
	if (i==15){vec_dist_mainaxon.append(509.709)}
	if (i==16){vec_dist_mainaxon.append(541.822)}
	if (i==17){vec_dist_mainaxon.append(575.359)}
	if (i==18){vec_dist_mainaxon.append(608.221)}
	if (i==19){vec_dist_mainaxon.append(641.873)}
	if (i==20){vec_dist_mainaxon.append(677.974)}
	if (i==21){vec_dist_mainaxon.append(718.398)}
	if (i==22){vec_dist_mainaxon.append(758.888)}
	if (i==23){vec_dist_mainaxon.append(793.922)}
	if (i==24){vec_dist_mainaxon.append(832.158)}
	if (i==25){vec_dist_mainaxon.append(875.976)}
	if (i==26){vec_dist_mainaxon.append(920.232)}
	if (i==27){vec_dist_mainaxon.append(967.677)}
	if (i==28){vec_dist_mainaxon.append(1012.563)}
	
	if (i>28){
		
		vec_dist_mainaxon.append(vec_dist_mainaxon.x[i-1]+26.5)
		
	}

}





// count the number of presynaptic sites in the model (one presynaptic sites every 8 µm on the collaterals)
n_vec_ca_bouton=0

for i=0,88{
	
	a=int(axon[i].L/8)+1
	
	for j=0,a-2{
		
		n_vec_ca_bouton=n_vec_ca_bouton+1
		
	}
	
}

for i=0,3{
	
	a=int(coll[i].L/8)+1
	
	for j=0,a-2{
		
		n_vec_ca_bouton=n_vec_ca_bouton+1
		
	}
	
}

print n_vec_ca_bouton


// create vectors to record Ca2+ current at presynaptic sites
objref vec_ca_bouton[n_vec_ca_bouton]

for i=0,n_vec_ca_bouton-1{
	
	vec_ca_bouton[i]=new Vector()
	
}


// make the vectors to record Ca2+ current at presynaptic sites
count_vec_ca_bouton=0

for i=0,88{
	
	a=int(axon[i].L/8)+1
	
	b=1/a
	
	for j=0,a-2{
		
		vec_ca_bouton[count_vec_ca_bouton].record(&axon[i].ica(b*j+b))
		
		count_vec_ca_bouton=count_vec_ca_bouton+1
		
	}
	
}

for i=0,3{
	
	a=int(coll[i].L/8)+1
	
	b=1/a
	
	for j=0,a-2{
		
		vec_ca_bouton[count_vec_ca_bouton].record(&coll[i].ica(b*j+b))
		
		count_vec_ca_bouton=count_vec_ca_bouton+1
		
	}
	
}



// create vector to store distance of presynaptic sites from the soma
objref vec_dist_bouton

vec_dist_bouton=new Vector()

for i=0,88{
	
	a=int(axon[i].L/8)+1
	
	b=1/a
	
	if (i==0){axon_dist=129.26}
	if (i==1){axon_dist=138.6657}
	if (i==2){axon_dist=153.2137}
	if (i==3){axon_dist=276.8437}
	if (i==4){axon_dist=276.8437}
	if (i==5){axon_dist=153.2137}
	if (i==6){axon_dist=138.6657}
	if (i==7){axon_dist=156.7977}
	if (i==8){axon_dist=164.034}
	if (i==9){axon_dist=164.034}
	if (i==10){axon_dist=156.7977}
	if (i==11){axon_dist=159.3122}
	if (i==12){axon_dist=163.9238}
	if (i==13){axon_dist=171.3418}
	if (i==14){axon_dist=171.3418}
	if (i==15){axon_dist=163.9238}
	if (i==16){axon_dist=168.5072}
	if (i==17){axon_dist=198.0222}
	if (i==18){axon_dist=198.0222}
	if (i==19){axon_dist=168.5072}
	if (i==20){axon_dist=277.7072}
	if (i==21){axon_dist=277.7072}
	if (i==22){axon_dist=159.3122}
	if (i==23){axon_dist=300.66}
	if (i==24){axon_dist=451.75}
	if (i==25){axon_dist=451.75}
	if (i==26){axon_dist=747.32}
	if (i==27){axon_dist=895.99}
	if (i==28){axon_dist=895.99}
	if (i==29){axon_dist=906.55}
	if (i==30){axon_dist=906.55}
	if (i==31){axon_dist=747.32}
	if (i==32){axon_dist=300.66}
	if (i==33){axon_dist=317.84}
	if (i==34){axon_dist=714.05}
	if (i==35){axon_dist=714.05}
	if (i==36){axon_dist=1058.57}
	if (i==37){axon_dist=1058.57}
	if (i==38){axon_dist=317.84}
	if (i==39){axon_dist=404.152}
	if (i==40){axon_dist=458.521}
	if (i==41){axon_dist=458.521}
	if (i==42){axon_dist=563.131}
	if (i==43){axon_dist=563.131}
	if (i==44){axon_dist=404.152}
	if (i==45){axon_dist=807.634}
	if (i==46){axon_dist=990.864}
	if (i==47){axon_dist=990.864}
	if (i==48){axon_dist=129.26}
	if (i==49){axon_dist=139.887}
	if (i==50){axon_dist=148.5451}
	if (i==51){axon_dist=169.0531}
	if (i==52){axon_dist=218.4121}
	if (i==53){axon_dist=328.6121}
	if (i==54){axon_dist=1022.8621}
	if (i==55){axon_dist=1222.7121}
	if (i==56){axon_dist=1222.7121}
	if (i==57){axon_dist=1511.3821}
	if (i==58){axon_dist=1511.3821}
	if (i==59){axon_dist=1022.8621}
	if (i==60){axon_dist=1032.7284}
	if (i==61){axon_dist=1032.7284}
	if (i==62){axon_dist=1084.4604}
	if (i==63){axon_dist=1084.4604}
	if (i==64){axon_dist=1090.1145}
	if (i==65){axon_dist=1090.1145}
	if (i==66){axon_dist=328.6121}
	if (i==67){axon_dist=218.4121}
	if (i==68){axon_dist=169.0531}
	if (i==69){axon_dist=471.4931}
	if (i==70){axon_dist=471.4931}
	if (i==71){axon_dist=148.5451}
	if (i==72){axon_dist=139.887}
	if (i==73){axon_dist=145.3986}
	if (i==74){axon_dist=150.1225}
	if (i==75){axon_dist=449.0725}
	if (i==76){axon_dist=449.0725}
	if (i==77){axon_dist=150.1225}
	if (i==78){axon_dist=157.63}
	if (i==79){axon_dist=167.2001}
	if (i==80){axon_dist=167.2001}
	if (i==81){axon_dist=210.5031}
	if (i==82){axon_dist=210.5031}
	if (i==83){axon_dist=157.63}
	if (i==84){axon_dist=229.71}
	if (i==85){axon_dist=229.71}
	if (i==86){axon_dist=145.3986}
	if (i==87){axon_dist=159.7296}
	if (i==88){axon_dist=159.7296}
	
	
	for j=0,a-2{
		
		vec_dist_bouton.append(axon_dist+axon[i].L*(b*j+b))

	}
	
}

for i=0,3{
	
	a=int(coll[i].L/8)+1
	
	b=1/a
	
	if (i==0){coll_dist=1899.864}
	if (i==1){coll_dist=2909.864}
	if (i==2){coll_dist=3919.864}
	if (i==3){coll_dist=4929.864}

	
	for j=0,a-2{
		
		vec_dist_bouton.append(coll_dist+coll[i].L*(b*j+b))
	
	}
	
}





// create vector to store distance of the first presynaptic sites of each collateral 
// from the soma
objref vec_dist_first_bouton

vec_dist_first_bouton=new Vector()

for i=0,88{
	
	a=int(axon[i].L/8)+1
	
	b=1/a
	
	if (i==0){
		
		axon_dist=129.26
		vec_dist_first_bouton.append(axon_dist+axon[i].L*(b))
	
	}
	
	if (i==23){
		
		axon_dist=300.66
		vec_dist_first_bouton.append(axon_dist+axon[i].L*(b))
		
	}
	
	if (i==32){
		
		axon_dist=300.66
		vec_dist_first_bouton.append(axon_dist+axon[i].L*(b))
		
	}
	
	if (i==45){
		
		axon_dist=807.634
		vec_dist_first_bouton.append(axon_dist+axon[i].L*(b))
		
	}
	
	if (i==46){
		
		axon_dist=990.864
		vec_dist_first_bouton.append(axon_dist+axon[i].L*(b))
		
	}
	
	if (i==47){
		
		axon_dist=990.864
		vec_dist_first_bouton.append(axon_dist+axon[i].L*(b))
		
	}
	
	if (i==48){
		
		axon_dist=129.26
		vec_dist_first_bouton.append(axon_dist+axon[i].L*(b))
		
	}
	
}

for i=0,3{
	
	a=int(coll[i].L/8)+1
	
	b=1/a
	
	if (i==0){coll_dist=1899.864}
	if (i==1){coll_dist=2909.864}
	if (i==2){coll_dist=3919.864}
	if (i==3){coll_dist=4929.864}
	
	vec_dist_first_bouton.append(coll_dist+coll[i].L*(b))
	
}

vec_dist_first_bouton.sort() // sort the distance in ascending order




// create vectors to record Ca2+ current at the first presynaptic sites
// of each collateral
objref vec_ca_first_bouton[11]

for i=0,10{
	
	vec_ca_first_bouton[i]=new Vector()
	
}

// make the vectors to record Ca2+ current at the first presynaptic site
// of each collateral
count_vec_ca_first_bouton=0

for i=0,88{
	
	a=int(axon[i].L/8)+1
	
	b=1/a
	
	if (i==0){
		
		vec_ca_first_bouton[count_vec_ca_first_bouton].record(&axon[i].ica(b))
		count_vec_ca_first_bouton=count_vec_ca_first_bouton+1
	
	}
	
	if (i==23){
		
		vec_ca_first_bouton[count_vec_ca_first_bouton].record(&axon[i].ica(b))
		count_vec_ca_first_bouton=count_vec_ca_first_bouton+1
		
	}
	
	if (i==32){
		
		vec_ca_first_bouton[count_vec_ca_first_bouton].record(&axon[i].ica(b))
		count_vec_ca_first_bouton=count_vec_ca_first_bouton+1
		
	}
	
	if (i==45){
		
		vec_ca_first_bouton[count_vec_ca_first_bouton].record(&axon[i].ica(b))
		count_vec_ca_first_bouton=count_vec_ca_first_bouton+1
		
	}
	
	if (i==46){
		
		vec_ca_first_bouton[count_vec_ca_first_bouton].record(&axon[i].ica(b))
		count_vec_ca_first_bouton=count_vec_ca_first_bouton+1
		
	}
	
	if (i==47){
		
		vec_ca_first_bouton[count_vec_ca_first_bouton].record(&axon[i].ica(b))
		count_vec_ca_first_bouton=count_vec_ca_first_bouton+1
		
	}
	
	if (i==48){
		
		vec_ca_first_bouton[count_vec_ca_first_bouton].record(&axon[i].ica(b))
		count_vec_ca_first_bouton=count_vec_ca_first_bouton+1
		
	}
	
}

for i=0,3{
	
	a=int(coll[i].L/8)+1
	
	b=1/a
	
	vec_ca_first_bouton[count_vec_ca_first_bouton].record(&coll[i].ica(b))
	count_vec_ca_first_bouton=count_vec_ca_first_bouton+1
	
}




// create the vectors to extract subthreshold voltage just before AP during the simulations (in the main axon)
objref vec_voltage_mainaxon_before_AP_cont

vec_voltage_mainaxon_before_AP_cont=new Vector()

objref vec_voltage_mainaxon_before_AP_hyperpol

vec_voltage_mainaxon_before_AP_hyperpol=new Vector()

objref vec_voltage_mainaxon_before_AP_depol

vec_voltage_mainaxon_before_AP_depol=new Vector()

objref vec_voltage_mainaxon_before_AP_depol_normalized

vec_voltage_mainaxon_before_AP_depol_normalized=new Vector()

objref vec_voltage_mainaxon_before_AP_hyperpol_normalized

vec_voltage_mainaxon_before_AP_hyperpol_normalized=new Vector()


// create the vectors to calculate AP overshoot modulation during the simulations (in the main axon)
objref vec_overshoot_cont

vec_overshoot_cont=new Vector()

objref vec_overshoot_hyperpol

vec_overshoot_hyperpol=new Vector()

objref vec_overshoot_depol

vec_overshoot_depol=new Vector()

objref vec_overshoot_hyperpol_normalized

vec_overshoot_hyperpol_normalized=new Vector()

objref vec_overshoot_depol_normalized

vec_overshoot_depol_normalized=new Vector()


// create the vectors to calculate AP area modulation during the simulations (in the main axon)
objref vec_intPA_cont

vec_intPA_cont=new Vector()

objref vec_intPA_hyperpol

vec_intPA_hyperpol=new Vector()

objref vec_intPA_depol

vec_intPA_depol=new Vector()

objref vec_intPA_hyperpol_normalized

vec_intPA_hyperpol_normalized=new Vector()

objref vec_intPA_depol_normalized

vec_intPA_depol_normalized=new Vector()


// create the vectors to calculate Ca2+ charge modulation during the simulations (in the presynaptic sites)
objref vec_intca_bouton_cont

vec_intca_bouton_cont=new Vector()

objref vec_intca_bouton_hyperpol

vec_intca_bouton_hyperpol=new Vector()

objref vec_intca_bouton_depol

vec_intca_bouton_depol=new Vector()

objref vec_hADF_bouton

vec_hADF_bouton=new Vector()

objref vec_dADF_bouton

vec_dADF_bouton=new Vector()



// create the vectors to calculate Ca2+ charge modulation during the simulations
// (in the first presynaptic site of each collateral)
objref vec_intca_first_bouton_cont

vec_intca_first_bouton_cont=new Vector()

objref vec_intca_first_bouton_hyperpol

vec_intca_first_bouton_hyperpol=new Vector()

objref vec_intca_first_bouton_depol

vec_intca_first_bouton_depol=new Vector()

objref vec_hADF_first_bouton

vec_hADF_first_bouton=new Vector()

objref vec_dADF_first_bouton

vec_dADF_first_bouton=new Vector()



// this vector is necessary to copy vectors in order to extract the different values
objref vec_clone

vec_clone=new Vector()










// create a procedure to run one simulation with a set of parameters (myelin or not; somatic voltage depolarized, hyperpolarized or not)
proc run_one_simulation(){
	
	// stimulations parameters for the control, hyperpolarized or depolarized cases

	if (hyperpol==0 && depol==0){

		stim1.amp=3
		
		stim2.amp=0
		
		stim2.del=100
		
		stim2.dur=10000
		
	}

	if (hyperpol==1 && depol==0){
		
		stim1.amp=5.1
		
		stim2.amp=-0.3225
		
		stim2.del=9900
		
		stim2.dur=200

	}

	if (hyperpol==0 && depol==1){

		stim1.amp=1.5
		
		stim2.amp=0.345
		
		stim2.del=100
		
		stim2.dur=10000

	}

	
	
	

	
	
	// initiate the simulation
	
	v_init=-70

	celsius=37
	
	
	// run the firsts 10020 ms of the simulation at high dt to diminish the computing time 

	steps_per_ms=0.1

	dt=10

	tstop=10020
	
	init()

	run()
	
	// run the end of the simulation at low dt to compute precisely the AP shape and calcium charge 
	
	steps_per_ms=160
	
	dt=0.00625
	
	continuerun(10200)

	print "dt=",dt
	




	// Store the subthreshold voltage just before AP at nodes of ranvier in the control, depolarized or hyperpolarized cases
	for i=0,n_nodes{
		
		a=vec_voltage_mainaxon[i].max_ind()-int(3/dt)
		
		b=vec_voltage_mainaxon[i].max_ind()-int(70/dt)
		
		if (hyperpol==0 && depol==0){
		
			c=vec_voltage_mainaxon[i].mean(b,a)
			
			vec_voltage_mainaxon_before_AP_cont.append(c)
			
		}
		
		if (hyperpol==1 && depol==0){
		
			c=vec_voltage_mainaxon[i].min(b,a)
			
			vec_voltage_mainaxon_before_AP_hyperpol.append(c)
			
		}
		
		if (hyperpol==0 && depol==1){
		
			c=vec_voltage_mainaxon[i].max(b,a)
			
			vec_voltage_mainaxon_before_AP_depol.append(c)
			
		}

	}



	
	// Store AP overshoot at nodes of ranvier in the control, depolarized or hyperpolarized cases
	for i=0,n_nodes{
		
		if (hyperpol==0 && depol==0){
		
			a=vec_voltage_mainaxon[i].max()
		
			vec_overshoot_cont.append(a)
		}
		
		if (hyperpol==1 && depol==0){
		
			a=vec_voltage_mainaxon[i].max()
		
			vec_overshoot_hyperpol.append(a)
		}
		
		if (hyperpol==0 && depol==1){
		
			a=vec_voltage_mainaxon[i].max()
		
			vec_overshoot_depol.append(a)
		}
		
	}

	


	
	// Store AP area at nodes of ranvier in the control, depolarized or hyperpolarized cases
	for i=0,n_nodes{
		
		a=vec_voltage_mainaxon[i].indwhere(">=",-50)
		
		vec_clone=vec_voltage_mainaxon[i].c(a)
		
		a=vec_clone.indwhere("<=",-50)
		
		vec_clone=vec_clone.add(50)
		
		a=vec_clone.sum(0,a)
		
		if (hyperpol==0 && depol==0){
		
			vec_intPA_cont.append(a)
			
		}
		
		if (hyperpol==1 && depol==0){
		
			vec_intPA_hyperpol.append(a)
			
		}
		
		if (hyperpol==0 && depol==1){
		
			vec_intPA_depol.append(a)
			
		}
		
	}


	
	
	// Store calcium charge at presynaptic site in the control, depolarized or hyperpolarized cases
	for i=0,n_vec_ca_bouton-1{
		
		a=vec_ca_bouton[i].indwhere("<",-0.0001)
	
		vec_clone=vec_ca_bouton[i].c(a)
		
		a=vec_clone.indwhere(">",-0.0001)
		
		b=vec_clone.sum(0,a)
		
		if (hyperpol==0 && depol==0){
		
			vec_intca_bouton_cont.append(b)
		
		}
		
		if (hyperpol==1 && depol==0){
		
			vec_intca_bouton_hyperpol.append(b)
		
		}
		
		if (hyperpol==0 && depol==1){
		
			vec_intca_bouton_depol.append(b)
		
		}
		
	}
	
	
	
	// Store calcium charge at the first presynaptic site of each collateral
	// in the control, depolarized or hyperpolarized cases
	for i=0,10{
		
		a=vec_ca_first_bouton[i].indwhere("<",-0.0001)
	
		vec_clone=vec_ca_first_bouton[i].c(a)
		
		a=vec_clone.indwhere(">",-0.0001)
		
		b=vec_clone.sum(0,a)
		
		if (hyperpol==0 && depol==0){
		
			vec_intca_first_bouton_cont.append(b)
		
		}
		
		if (hyperpol==1 && depol==0){
		
			vec_intca_first_bouton_hyperpol.append(b)
		
		}
		
		if (hyperpol==0 && depol==1){
		
			vec_intca_first_bouton_depol.append(b)
		
		}
		
	}

}




// create a procedure to run all simulations in a raw to compare the unmyelinated and the myelinated model
proc run_all_simulations(){
	
	// run the simulation without depolarization or hyperpolarization of the soma
	hyperpol=0
	depol=0

	run_one_simulation()

	
	// run the simulation with 200 ms hyperpolarization of the soma before the spike	
	hyperpol=1
	depol=0

	run_one_simulation()


	// run the simulation with 10 seconds depolarization of the soma before the spike
	hyperpol=0
	depol=1

	run_one_simulation()




	// calculate the difference of voltage before the AP at nodes of ranvier between the control and the hyperpolarized case
	// or between the control and depolarized case
	for i=0,n_nodes{
		
		vec_voltage_mainaxon_before_AP_hyperpol_normalized.append(abs(vec_voltage_mainaxon_before_AP_hyperpol.x[i]-vec_voltage_mainaxon_before_AP_cont.x[i]))
		vec_voltage_mainaxon_before_AP_depol_normalized.append(vec_voltage_mainaxon_before_AP_depol.x[i]-vec_voltage_mainaxon_before_AP_cont.x[i])
		
	}
	
	
	// calculate the difference of AP overshoot at nodes of ranvier between the control and the hyperpolarized case
	// or between the control and depolarized case
	for i=0,n_nodes{
		
		vec_overshoot_hyperpol_normalized.append((vec_overshoot_hyperpol.x[i]-vec_overshoot_cont.x[i]))
		vec_overshoot_depol_normalized.append((vec_overshoot_depol.x[i]-vec_overshoot_cont.x[i]))
		
	}

	
	// calculate the ratio of AP area at nodes of ranvier between the control and the hyperpolarized case
	// or between the control and depolarized case
	for i=0,n_nodes{
		
		vec_intPA_hyperpol_normalized.append((vec_intPA_hyperpol.x[i]/vec_intPA_cont.x[i])*100)
		vec_intPA_depol_normalized.append((vec_intPA_depol.x[i]/vec_intPA_cont.x[i])*100)
		
	}


	// calculate the ratio of Ca2+ charge at presynaptic boutons between the control and the hyperpolarized case
	// or between the control and depolarized case. This ratio set to power 2.5 représente the ratio of synaptic release
	// in our model. This value is called hADF in the hyperpolarized case and dADF in the depolarized case.
	for i=0,n_vec_ca_bouton-1{

		vec_hADF_bouton.append(((vec_intca_bouton_hyperpol.x[i]/vec_intca_bouton_cont.x[i])^2.5)*100)
		vec_dADF_bouton.append(((vec_intca_bouton_depol.x[i]/vec_intca_bouton_cont.x[i])^2.5)*100)
		
	}

	// calculate the ratio of Ca2+ charge at the first presynaptic bouton of each collateral
	// between the control and the hyperpolarized case or between the control and depolarized case.
	// This ratio set to power 2.5 représente the ratio of synaptic release in our model.
	// This value is called hADF in the hyperpolarized case and dADF in the depolarized case.
	for i=0,10{

		vec_hADF_first_bouton.append(((vec_intca_first_bouton_hyperpol.x[i]/vec_intca_first_bouton_cont.x[i])^2.5)*100)
		vec_dADF_first_bouton.append(((vec_intca_first_bouton_depol.x[i]/vec_intca_first_bouton_cont.x[i])^2.5)*100)
		
	}
	// This is neccesary to order the first bouton hADF in function of the distance of the bouton from the soma
	a=vec_hADF_first_bouton.x[6]
	b=vec_hADF_first_bouton.x[0]
	vec_hADF_first_bouton.remove(6)
	vec_hADF_first_bouton.remove(0)
	vec_hADF_first_bouton.insrt(0,b,a)
	// This is neccesary to order the first bouton dADF in function of the distance of the bouton from the soma
	a=vec_dADF_first_bouton.x[6]
	b=vec_dADF_first_bouton.x[0]
	vec_dADF_first_bouton.remove(6)
	vec_dADF_first_bouton.remove(0)
	vec_dADF_first_bouton.insrt(0,b,a)

}